CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (directory does contain "test")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^r(?P<WellRow>\d{2})c(?P<WellColumn>\d{2})f(?P<Site>\d{2})p\d{2}-ch(?P<ChannelNumber>\d)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:9
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:BF
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:ER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "3")
    Name to assign these images:AGP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "4")
    Name to assign these images:Mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "5")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "6")
    Name to assign these images:RNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "7")
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    Name to assign these objects:Cells
    Select the image type:Objects
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    Select the rule criteria:and (metadata does ChannelNumber "8")
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    Name to assign these objects:Somas
    Select the image type:Objects
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    Select the rule criteria:and (metadata does ChannelNumber "9")
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    Name to assign these objects:Nuclei
    Select the image type:Objects
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:WellRow

RescaleIntensity:[module_num:5|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
    Select the input image:AGP
    Name the output image:scaled_AGP
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:6|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
    Select the input image:DNA
    Name the output image:scaled_DNA
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:7|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
    Select the input image:ER
    Name the output image:scaled_ER
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:8|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
    Select the input image:RNA
    Name the output image:scaled_RNA
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:9|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
    Select the input image:Mito
    Name the output image:scaled_mito
    Rescaling method:Stretch each image to use the full intensity range
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
MeasureObjectSizeShape:[module_num:10|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
    Select object sets to measure:Cells, Nuclei, Somas
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:11|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
    Select images to measure:scaled_AGP, scaled_DNA, scaled_ER, scaled_RNA, scaled_mito
    Select objects to measure:Cells, Nuclei, Somas

MeasureObjectNeighbors:[module_num:12|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
    Select objects to measure:Somas
    Select neighboring objects to measure:Somas
    Method to determine neighbors:Within a specified distance
    Neighbor distance:3
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:13|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
    Select objects to measure:Somas
    Select neighboring objects to measure:Somas
    Method to determine neighbors:Within a specified distance
    Neighbor distance:10
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:14|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:10
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:15|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureTexture:[module_num:16|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
    Select images to measure:scaled_AGP, scaled_DNA, scaled_ER, scaled_RNA, scaled_mito
    Select objects to measure:Nuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

MeasureTexture:[module_num:17|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
    Select images to measure:scaled_AGP, scaled_DNA, scaled_ER, scaled_RNA, scaled_mito
    Select objects to measure:Cells, Somas
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:10

ExportToSpreadsheet:[module_num:18|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Documents/shavit-lab/fraenkel/first-sample/Assay Dev 20230329/BR00142688__2024-03-29T19_57_13-Measurement 1/deployment-test/stats
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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